PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['images.csv', 'image/Acorns 1.jpg', 'image/Acorns 2.jpg', 'image/Acorns 3.jpg', 'image/Alcohol 1.jpg', 'image/Alcohol 2.jpg', 'image/Alcohol 3.jpg', 'image/Alcohol 4.jpg', 'image/Alcohol 5.jpg', 'image/Alcohol 6.jpg', 'image/Alcohol 7.jpg', 'image/Alcohol 8.jpg', 'image/Ambulance 1.jpg', 'image/Ambulance 2.jpg', 'image/Ambulance 3.jpg', 'image/Angry face 1.jpg', 'image/Angry face 2.jpg', 'image/Angry face 3.jpg', 'image/Angry face 4.jpg', 'image/Angry face 5.jpg', 'image/Angry pose 1.jpg', 'image/Angry pose 2.jpg', 'image/Animal carcass 1.jpg', 'image/Animal carcass 2.jpg', 'image/Animal carcass 3.jpg', 'image/Animal carcass 4.jpg', 'image/Animal carcass 5.jpg', 'image/Animal carcass 6.jpg', 'image/Archery 1.jpg', 'image/Archery 2.jpg', 'image/Astronaut 1.jpg', 'image/Astronaut 2.jpg', 'image/Baby 1.jpg', 'image/Baby 2.jpg', 'image/Baby 3.jpg', 'image/Baby 4.jpg', 'image/Baby 5.jpg', 'image/Baby 6.jpg', 'image/Baby 7.jpg', 'image/Baby 8.jpg', 'image/Baby 9.jpg', 'image/Baby 10.jpg', 'image/Band 1.jpg', 'image/Band 2.jpg', 'image/Bar 1.jpg', 'image/Bar 3.jpg', 'image/Barbeque 1.jpg', 'image/Barbeque 2.jpg', 'image/Bark 1.jpg', 'image/Bark 2.jpg', 'image/Bark 3.jpg', 'image/Bark 4.jpg', 'image/Bark 5.jpg', 'image/Bark 6.jpg', 'image/Barrels 1.jpg', 'image/BDSM 1.jpg', 'image/BDSM 2.jpg', 'image/BDSM 3.jpg', 'image/Beach 1.jpg', 'image/Beach 2.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = image_shower
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = image/Acorns 1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $random_duration
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = $random_duration
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import csv
        import random
        IMAGE_ORDER = []

        # read csv
        with open("images.csv") as f:
            reader = csv.reader(f)
            next(reader, None) # skip header
            for row in reader:
                image_path = row[2]
                IMAGE_ORDER.append(image_path)

        print(IMAGE_ORDER[0])
        random.shuffle(IMAGE_ORDER)
        print(IMAGE_ORDER[0])
      Begin JS Experiment:
        //IMAGE_ORDER = [
        //    "image/Baby 1.jpg",
        //    "image/Baby 2.jpg",
        //    "image/Baby 3.jpg",
        //];
        IMAGE_ORDER = ["image/Baby 1.jpg"];

        fetch('images.csv')
              .then(response => response.text())
              .then(text => {
                const lines = text.split('\n');
                for (let i = 1; i < lines.length; i++) {
                    const line = lines[i];
                    const values = line.split(',');
                    IMAGE_ORDER.push(values[2]);
                }
                console.log(IMAGE_ORDER);
                IMAGE_ORDER = IMAGE_ORDER.slice(0, 10);
                console.log(IMAGE_ORDER);
                let test = shuffleArray(IMAGE_ORDER);
                console.log(IMAGE_ORDER);
                console.log(test)
              });



        // Function to shuffle an array (Fisher-Yates Shuffle Algorithm)
        function shuffleArray(array) {
          for (let i = array.length - 1; i > 0; i--) {
            const j = Math.floor(Math.random() * (i + 1));
            [array[i], array[j]] = [array[j], array[i]]; // Swap elements
          }
        }
      Begin JS Routine:
        random_duration = 2 + Math.floor(Math.random() * 8);
        text_2.text = random_duration;

        image_path = IMAGE_ORDER[loops.thisN];
        console.log(image.image);
        image.image = image_path;
        console.log(image_path);
        console.log(image.image);
      Begin Routine:
        import random
        random_duration = random.randint(2,10)
        text_2.text = random_duration

        image_path = IMAGE_ORDER[loops.thisN]
        print(image_path)
        image.Image = image_path
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = 0
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  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = c
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0:
            text.text = "Welcome! (1) 1.1"
        elif trials.thisN == 1:
            text.text = "Welcome! (2)"
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine wait
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine break_2
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    TextComponent text_countdown
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = countdown
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    CodeComponent code_3
      Code Type = Both
      disabled = True
      Begin JS Routine:
        clock = new util.Clock();
        oldTime = 0
        countdown_time = 10
      Begin Routine:
        task_timer = core.CountdownTimer(start = 5)
      Each Frame:
        # end task after 5 secs
        time_left = task_timer.getTime()
        minutes = int(time_left/60)
        seconds = int(time_left - minutes * 60)

        text_countdown.text = seconds
        if time_left <= 0.0:
            continueRoutine = False
      Each JS Frame:
        if (countdown_time == 0) {
            continueRoutine = false;
        }

        newTime=myClock.getTime()
        mins = floor(newTime / 60)
        secs = newTime % 60

        if ((newTime !== oldTime)) {
          text_countdown.text = ((Number.parseInt(mins).toString().padStart(2,"0") + ":") + Number.parseInt(secs).toString().padStart(2,"0"));
          oldTime = newTime;
          countdown_time--;
        }
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine welcome
    LoopInitiator loops loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine trial
      Routine wait
    LoopTerminator loops
    Routine break_2
  LoopTerminator trials
